PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  HTML path = HTML
  Monitor = testMonitor
  Resources = ['images/image_MX/fig12043.jpg', 'images/image_MX/fig12044.jpg', 'images/image_MX/fig12045.jpg', 'images/image_MX/fig12046.jpg', 'images/image_MX/fig12047.jpg', 'images/image_MX/fig12048.jpg', 'images/image_MX/fig12050.jpg', 'images/image_MX/fig12053.jpg', 'images/image_MX/fig12054.jpg', 'images/image_MX/fig12055.jpg', 'images/image_MX/fig12056.jpg', 'images/image_3DR/fig11001.png', 'images/image_3DR/fig11002.png', 'images/image_3DR/fig11003.png', 'images/image_3DR/fig11004.png', 'images/image_3DR/fig11005.png', 'images/image_3DR/fig11006.png', 'images/image_3DR/fig11007.png', 'images/image_3DR/fig11008.png', 'images/image_3DR/fig11009.png', 'images/image_3DR/fig11010.png', 'images/image_3DR/fig11011.png', 'images/image_3DR/fig11012.png', 'images/image_3DR/fig11013.png', 'images/image_3DR/fig11014.png', 'images/image_3DR/fig11015.png', 'images/image_3DR/fig11016.png', 'images/image_3DR/fig11017.png', 'images/image_3DR/fig11018.png', 'images/image_3DR/fig11019.png', 'images/image_3DR/fig11020.png', 'images/image_3DR/fig11021.png', 'images/image_3DR/fig11022.png', 'images/image_3DR/fig11023.png', 'images/image_3DR/fig11024.png', 'images/image_3DR/fig11025.png', 'images/image_3DR/fig11026.png', 'images/image_3DR/fig11027.png', 'images/image_3DR/fig11028.png', 'images/image_3DR/fig11029.png', 'images/image_3DR/fig11030.png', 'images/image_3DR/fig11031.png', 'images/image_3DR/fig11032.png', 'images/image_3DR/fig11033.png', 'images/image_3DR/fig11034.png', 'images/image_3DR/fig11035.png', 'images/image_3DR/fig11036.png', 'images/image_3DR/fig11037.png', 'images/image_3DR/fig11038.png', 'images/image_3DR/fig11039.png', 'images/image_3DR/fig11040.png', 'images/image_3DR/fig11041.png', 'images/image_3DR/fig11042.png', 'images/image_3DR/fig11043.png', 'images/image_3DR/fig11044.png', 'images/image_3DR/fig11045.png', 'images/image_3DR/fig11046.png', 'images/image_3DR/fig11047.png', 'images/image_3DR/fig11048.png', 'images/image_3DR/fig11049.png', 'images/image_3DR/fig11050.png', 'images/image_3DR/fig11051.png', 'images/image_3DR/fig11052.png', 'images/image_3DR/fig11053.png', 'images/image_3DR/fig11054.png', 'images/image_3DR/fig11055.png', 'images/image_3DR/fig11056.png', 'images/image_3DR/fig11057.png', 'images/image_3DR/fig11058.png', 'images/image_3DR/fig11059.png', 'images/image_3DR/fig11060.png', 'images/image_3DR/fig11061.png', 'images/image_3DR/fig11062.png', 'images/image_3DR/fig11063.png', 'images/image_3DR/fig11064.png', 'images/image_3DR/fig11065.png', 'images/image_3DR/fig11066.png', 'conditions_3DR.csv', 'conditions_LN.csv', 'conditions_MX.csv', 'conditions_VR.csv']
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  color = black
  expName = tentaiveonline
  exportHTML = on Save
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine routine_VR_trial
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    PolygonComponent text_box1
      fillColor = white
      lineColor = black
      pos = [-0.55, -0.05]
      shape = rectangle
      size = (0.33, 0.22)
      startVal [time (s)] = 0.0
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    PolygonComponent text_box2
      fillColor = white
      lineColor = black
      pos = [-0.18, -0.05]
      shape = rectangle
      size = (0.33, 0.22)
      startVal [time (s)] = 0.0
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    PolygonComponent text_box3
      fillColor = white
      lineColor = black
      pos = [0.18, -0.05]
      shape = rectangle
      size = (0.33, 0.22)
      startVal [time (s)] = 0.0
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    PolygonComponent text_box4
      fillColor = white
      lineColor = black
      pos = [0.55, -0.05]
      shape = rectangle
      size = (0.33, 0.22)
      startVal [time (s)] = 0.0
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    PolygonComponent text_box5
      fillColor = white
      pos = [-0.55, -0.28]
      shape = rectangle
      size = (0.33, 0.22)
      startVal [time (s)] = 0.0
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    PolygonComponent text_box6
      fillColor = white
      lineColor = black
      pos = [-0.18, -0.28]
      shape = rectangle
      size = (0.33, 0.22)
      startVal [time (s)] = 0.0
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    PolygonComponent text_box7
      fillColor = white
      pos = [0.18, -0.28]
      shape = rectangle
      size = (0.33, 0.22)
      startVal [time (s)] = 0.0
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    PolygonComponent text_box8
      fillColor = white
      lineColor = black
      pos = [0.55, -0.28]
      shape = rectangle
      size = (0.33, 0.22)
      startVal [time (s)] = 0.0
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    TextComponent question_text
      font = Arial Unicode MS
      letterHeight = 0.04
      pos = [-0.35, 0.25]
      startVal [time (s)] = 0.0
      text [set every repeat] = $QUESTION.replace('\\n', '\n')
      units = height
      wrapWidth = 0.6
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    TextComponent option_1
      color = black
      font = Arial Unicode MS
      letterHeight = 0.023
      pos = [-0.55, -0.05]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice1).replace('.0', '')
      wrapWidth = 0.29
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    TextComponent option_2
      color = black
      font = Arial Unicode MS
      letterHeight = 0.023
      pos = [-0.18, -0.05]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice2).replace('.0', '')
      wrapWidth = 0.33
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    TextComponent option_3
      color = black
      font = Arial Unicode MS
      letterHeight = 0.023
      pos = [0.18, -0.05]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice3).replace('.0', '')
      wrapWidth = 0.29
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    TextComponent option_4
      color = black
      font = Arial Unicode MS
      letterHeight = 0.023
      pos = [0.55, -0.05]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice4).replace('.0', '')
      wrapWidth = 0.29
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    TextComponent option_5
      color = black
      font = Arial Unicode MS
      letterHeight = 0.023
      pos = [-0.55, -0.28]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice5).replace('.0', '')
      wrapWidth = 0.29
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    TextComponent option_6
      color = black
      font = Arial Unicode MS
      letterHeight = 0.023
      pos = [-0.18, -0.28]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice6).replace('.0', '')
      wrapWidth = 0.29
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    TextComponent option_7
      color = black
      font = Arial Unicode MS
      letterHeight = 0.023
      pos = [0.18, -0.28]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice7).replace('.0', '')
      wrapWidth = 0.29
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    TextComponent option_8
      color = black
      font = Arial Unicode MS
      letterHeight = 0.023
      pos = [0.55, -0.28]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice8).replace('.0', '')
      wrapWidth = 0.29
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    MouseComponent mouse
      clickable = text_box1, text_box2, text_box3, text_box4, text_box5, text_box6, text_box7, text_box8
      correctAns = 'text_box' + str(int(ANSWER))
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveParamsClickable [set every repeat] = name
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine routine_LN_trials
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    PolygonComponent text_box1_2
      fillColor = white
      lineColor = black
      pos = [-0.55, -0.05]
      shape = rectangle
      size = (0.33, 0.22)
      startVal [time (s)] = 0.0
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    PolygonComponent text_box2_2
      fillColor = white
      lineColor = black
      pos = [-0.18, -0.05]
      shape = rectangle
      size = (0.33, 0.22)
      startVal [time (s)] = 0.0
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    PolygonComponent text_box3_2
      fillColor = white
      lineColor = black
      pos = [0.18, -0.05]
      shape = rectangle
      size = (0.33, 0.22)
      startVal [time (s)] = 0.0
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    PolygonComponent text_box4_2
      fillColor = white
      lineColor = black
      pos = [0.55, -0.05]
      shape = rectangle
      size = (0.33, 0.22)
      startVal [time (s)] = 0.0
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    PolygonComponent text_box5_2
      fillColor = white
      pos = [-0.55, -0.28]
      shape = rectangle
      size = (0.33, 0.22)
      startVal [time (s)] = 0.0
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    PolygonComponent text_box6_2
      fillColor = white
      lineColor = black
      pos = [-0.18, -0.28]
      shape = rectangle
      size = (0.33, 0.22)
      startVal [time (s)] = 0.0
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    PolygonComponent text_box7_2
      fillColor = white
      pos = [0.18, -0.28]
      shape = rectangle
      size = (0.33, 0.22)
      startVal [time (s)] = 0.0
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    PolygonComponent text_box8_2
      fillColor = white
      lineColor = black
      pos = [0.55, -0.28]
      shape = rectangle
      size = (0.33, 0.22)
      startVal [time (s)] = 0.0
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    TextComponent question_text_2
      font = Arial Unicode MS
      letterHeight = 0.04
      pos = [-0.35, 0.25]
      startVal [time (s)] = 0.0
      text [set every repeat] = $QUESTION.replace('\\n', '\n')
      units = height
      wrapWidth = 0.6
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    TextComponent option
      color = black
      font = Arial Unicode MS
      letterHeight = 0.023
      pos = [-0.55, -0.05]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice1).replace('.0', '')
      wrapWidth = 0.29
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    TextComponent option_9
      color = black
      font = Arial Unicode MS
      letterHeight = 0.023
      pos = [-0.18, -0.05]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice2).replace('.0', '')
      wrapWidth = 0.33
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    TextComponent option_10
      color = black
      font = Arial Unicode MS
      letterHeight = 0.023
      pos = [0.18, -0.05]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice3).replace('.0', '')
      wrapWidth = 0.29
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    TextComponent option_11
      color = black
      font = Arial Unicode MS
      letterHeight = 0.023
      pos = [0.55, -0.05]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice4).replace('.0', '')
      wrapWidth = 0.29
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    TextComponent option_12
      color = black
      font = Arial Unicode MS
      letterHeight = 0.023
      pos = [-0.55, -0.28]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice5).replace('.0', '')
      wrapWidth = 0.29
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    TextComponent option_13
      color = black
      font = Arial Unicode MS
      letterHeight = 0.023
      pos = [-0.18, -0.28]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice6).replace('.0', '')
      wrapWidth = 0.29
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    TextComponent option_14
      color = black
      font = Arial Unicode MS
      letterHeight = 0.023
      pos = [0.18, -0.28]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice7).replace('.0', '')
      wrapWidth = 0.29
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    TextComponent option_15
      color = black
      font = Arial Unicode MS
      letterHeight = 0.023
      pos = [0.55, -0.28]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice8).replace('.0', '')
      wrapWidth = 0.29
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    MouseComponent mouse_4
      clickable = text_box1_2, text_box2_2, text_box3_2, text_box4_2, text_box5_2, text_box6_2, text_box7_2, text_box8_2
      correctAns = 'text_box' + str(int(ANSWER)) +'_2'
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveParamsClickable [set every repeat] = name
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine routine_3DR_trial
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    PolygonComponent rot_pol_1
      fillColor = white
      pos = [-0.45, -0.22]
      shape = rectangle
      size = [0.25, 0.1]
      startVal [time (s)] = 0.0
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    PolygonComponent rot_pol_2
      fillColor = white
      pos = [-0.15, -0.22]
      shape = rectangle
      size = [0.25, 0.1]
      startVal [time (s)] = 0.0
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    PolygonComponent rot_pol_3
      fillColor = white
      pos = [0.15, -0.22]
      shape = rectangle
      size = [0.25, 0.1]
      startVal [time (s)] = 0.0
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    PolygonComponent rot_pol_4
      fillColor = white
      pos = [0.45, -0.22]
      shape = rectangle
      size = [0.25, 0.1]
      startVal [time (s)] = 0.0
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    PolygonComponent rot_pol_5
      fillColor = white
      pos = [-0.45, -0.37]
      shape = rectangle
      size = [0.25, 0.1]
      startVal [time (s)] = 0.0
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    PolygonComponent rot_pol_6
      fillColor = white
      pos = [-0.15, -0.37]
      shape = rectangle
      size = [0.25, 0.1]
      startVal [time (s)] = 0.0
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    PolygonComponent rot_pol_7
      fillColor = white
      pos = [0.15, -0.37]
      shape = rectangle
      size = [0.25, 0.1]
      startVal [time (s)] = 0.0
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    PolygonComponent rot_pol_8
      fillColor = white
      pos = [0.45, -0.37]
      shape = rectangle
      size = [0.25, 0.1]
      startVal [time (s)] = 0.0
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    TextComponent ROT_Q
      font = Arial Unicode MS
      letterHeight = 0.04
      pos = [-0.35, 0.35]
      startVal [time (s)] = 0.0
      text [set every repeat] = $QUESTION
      units = height
      wrapWidth = 0.6
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    ImageComponent ROT_image
      anchor = top-center
      image [set every repeat] = $image_file
      pos = [0, 0.25]
      size = [0.8, 0.4]
      startVal [time (s)] = 0.0
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    TextComponent ROT_OPT_1
      color = black
      font = Arial Unicode MS
      letterHeight = 0.05
      pos = [-0.45, -0.22]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice1).replace('.0', '')
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    TextComponent ROT_OPT_2
      color = black
      font = Arial Unicode MS
      letterHeight = 0.05
      pos = [-0.15, -0.22]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice2).replace('.0', '')
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    TextComponent ROT_OPT_3
      color = black
      font = Arial Unicode MS
      letterHeight = 0.05
      pos = [0.15, -0.22]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice3).replace('.0', '')
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    TextComponent ROT_OPT_4
      color = black
      font = Arial Unicode MS
      letterHeight = 0.02
      pos = [0.45, -0.22]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice4).replace('.0', '')
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    TextComponent ROT_OPT_5
      color = black
      font = Arial Unicode MS
      letterHeight = 0.05
      pos = [-0.45, -0.37]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice5).replace('.0', '')
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    TextComponent ROT_OPT_6
      color = black
      font = Arial Unicode MS
      letterHeight = 0.05
      pos = [-0.15, -0.37]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice6).replace('.0', '')
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    TextComponent ROT_OPT_7
      color = black
      font = Arial Unicode MS
      letterHeight = 0.05
      pos = [0.15, -0.37]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice7).replace('.0', '')
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    TextComponent ROT_OPT_8
      color = black
      font = Arial Unicode MS
      letterHeight = 0.02
      pos = [0.45, -0.37]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice8).replace('.0', '')
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    MouseComponent mouse_2
      clickable = rot_pol_1, rot_pol_2, rot_pol_3, rot_pol_4, rot_pol_5, rot_pol_6, rot_pol_7, rot_pol_8
      correctAns = 'rot_pol_' + str(int(ANSWER))
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveParamsClickable [set every repeat] = name
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine routine_MX_trial
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    PolygonComponent MX_pol_1
      fillColor = white
      pos = [-0.45, -0.22]
      shape = rectangle
      size = [0.25, 0.1]
      startVal [time (s)] = 0.0
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    PolygonComponent MX_pol_2
      fillColor = white
      pos = [-0.15, -0.22]
      shape = rectangle
      size = [0.25, 0.1]
      startVal [time (s)] = 0.0
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    PolygonComponent MX_pol_3
      fillColor = white
      pos = [0.15, -0.22]
      shape = rectangle
      size = [0.25, 0.1]
      startVal [time (s)] = 0.0
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    PolygonComponent MX_pol_4
      fillColor = white
      pos = [0.45, -0.22]
      shape = rectangle
      size = [0.25, 0.1]
      startVal [time (s)] = 0.0
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    PolygonComponent MX_pol_5
      fillColor = white
      pos = [-0.45, -0.37]
      shape = rectangle
      size = [0.25, 0.1]
      startVal [time (s)] = 0.0
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    PolygonComponent MX_pol_6
      fillColor = white
      pos = [-0.15, -0.37]
      shape = rectangle
      size = [0.25, 0.1]
      startVal [time (s)] = 0.0
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    PolygonComponent MX_pol_7
      fillColor = white
      pos = [0.15, -0.37]
      shape = rectangle
      size = [0.25, 0.1]
      startVal [time (s)] = 0.0
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    PolygonComponent MX_pol_8
      fillColor = white
      pos = [0.45, -0.37]
      shape = rectangle
      size = [0.25, 0.1]
      startVal [time (s)] = 0.0
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    TextComponent MX_Q
      font = Arial Unicode MS
      letterHeight = 0.04
      pos = [-0.35, 0.40]
      startVal [time (s)] = 0.0
      text [set every repeat] = $QUESTION
      units = height
      wrapWidth = 0.6
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    ImageComponent MX_image_
      anchor = top-center
      image [set every repeat] = $image_file
      pos = [0, 0.32]
      size = [0.8, 0.4]
      startVal [time (s)] = 0.0
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    TextComponent MX_OPT_1
      color = black
      font = Arial Unicode MS
      letterHeight = 0.05
      pos = [-0.45, -0.22]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice1).replace('.0', '')
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    TextComponent MX_OPT_2
      color = black
      font = Arial Unicode MS
      letterHeight = 0.05
      pos = [-0.15, -0.22]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice2).replace('.0', '')
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    TextComponent MX_OPT_3
      color = black
      font = Arial Unicode MS
      letterHeight = 0.05
      pos = [0.15, -0.22]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice3).replace('.0', '')
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    TextComponent MX_OPT_4
      color = black
      font = Arial Unicode MS
      letterHeight = 0.05
      pos = [0.45, -0.22]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice4).replace('.0', '')
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    TextComponent MX_OPT_5
      color = black
      font = Arial Unicode MS
      letterHeight = 0.05
      pos = [-0.45, -0.37]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice5).replace('.0', '')
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    TextComponent MX_OPT_6
      color = black
      font = Arial Unicode MS
      letterHeight = 0.05
      pos = [-0.15, -0.37]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice6).replace('.0', '')
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    TextComponent MX_OPT_7
      color = black
      font = Arial Unicode MS
      letterHeight = 0.02
      pos = [0.15, -0.37]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice7).replace('.0', '')
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    TextComponent MX_OPT_8
      color = black
      font = Arial Unicode MS
      letterHeight = 0.02
      pos = [0.45, -0.37]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(choice8).replace('.0', '')
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    MouseComponent mouse_3
      clickable = MX_pol_1, MX_pol_2, MX_pol_3, MX_pol_4, MX_pol_5, MX_pol_6, MX_pol_7, MX_pol_8
      correctAns = 'MX_pol_%i' %int(ANSWER)
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveParamsClickable [set every repeat] = name
      startVal [time (s)] = 0.0
      storeCorrect = True
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  PavloviaSurveyRoutine survey_ICAR
    surveyType = id
  Routine end
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    TextComponent text
      font = Arial Unicode MS
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = ありがとうございます。
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  Routine DataSaving
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    CodeComponent code
      Code Type = JS
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      End JS Experiment:
        const results_data = psychoJS.experiment.save({
          attributes: []
        });

        fetch("https://pipe.jspsych.org/api/data/", {
          method: "POST",
          headers: {
            "Content-Type": "application/json",
            Accept: "*/*",
          },
          body: JSON.stringify({
            experimentID: "IGJG7547rP0O",
            filename: `data_${expName}_${psychoJS.experiment.extraInfo['participant']}.csv`,
            data: results_data,
          }),
        });
Flow
  LoopInitiator VR_trials loopType="TrialHandler"
    Selected rows = $random(4)*16
    conditionsFile = conditions_VR.csv
    loopType = random
    nReps = 1
    random seed = 4
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    conditions:
      [OrderedDict([('CATEGORY', 'VR'), ('QUESTION', '900の、9分の1の4分の1の5分の1はなんでしょうか。'), ('ANSWER', np.int64(4)), ('image_file', 'blank.png'), ('has_image', np.int64(0)), ('choice1', 2.0), ('choice2', 3.0), ('choice3', 4.0), ('choice4', 5.0), ('choice5', 6.0), ('choice6', 7.0), ('choice7', 'この中には答えはない'), ('choice8', 'わからない')]),
      OrderedDict([('CATEGORY', 'VR'), ('QUESTION', '次の単語のうち、ひとつだけ性質が違うものを選んでください。'), ('ANSWER', np.int64(4)), ('image_file', 'blank.png'), ('has_image', np.int64(0)), ('choice1', 'スギ'), ('choice2', 'ヒノキ'), ('choice3', 'マツ'), ('choice4', 'サクラ'), ('choice5', 'シダ'), ('choice6', 'カエデ'), ('choice7', 'どれも一致する'), ('choice8', 'わからない')]),
      OrderedDict([('CATEGORY', 'VR'), ('QUESTION', '頑固な人の反対は、---人です。'), ('ANSWER', np.int64(1)), ('image_file', 'blank.png'), ('has_image', np.int64(0)), ('choice1', '柔軟な'), ('choice2', '情熱的な'), ('choice3', '平凡な'), ('choice4', '控えめな'), ('choice5', 'おかしな'), ('choice6', 'しつこい'), ('choice7', 'この中には答えはない'), ('choice8', 'わからない')]),
      OrderedDict([('CATEGORY', 'VR'), ('QUESTION', 'ミシェルは96が好きですが、45は好きではありません。\nまた、540が好きですが、250は好きではありません。\nミシェルはどの数字が好きでしょうか？'), ('ANSWER', np.int64(5)), ('image_file', 'blank.png'), ('has_image', np.int64(0)), ('choice1', 86.0), ('choice2', 93.0), ('choice3', 98.0), ('choice4', 128.0), ('choice5', 132.0), ('choice6', 140.0), ('choice7', 'この中には答えはない'), ('choice8', 'わからない')])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
    Routine routine_VR_trial
  LoopTerminator VR_trials
  LoopInitiator LN_trials loopType="TrialHandler"
    Selected rows = $random(4)*9
    conditionsFile = conditions_LN.csv
    loopType = random
    nReps = 1
    random seed = 4
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    conditions:
      [OrderedDict([('CATEGORY', 'LN'), ('QUESTION', '以下のように数字が並んでいるとき、144の次に入る数字はどれでしょうか。\n64, 81, 100, 121, 144, …'), ('ANSWER', np.int64(4)), ('image_file', 'blank.png'), ('has_image', np.int64(0)), ('choice1', 154.0), ('choice2', 156.0), ('choice3', 162.0), ('choice4', 169.0), ('choice5', 178.0), ('choice6', 196.0), ('choice7', 'この中には答えはない'), ('choice8', 'わからない')]),
      OrderedDict([('CATEGORY', 'LN'), ('QUESTION', '以下のように数字が並んでいるとき、29の次に入る数字はどれでしょうか。\n4, 7, 11, 18, 29, …'), ('ANSWER', np.int64(4)), ('image_file', 'blank.png'), ('has_image', np.int64(0)), ('choice1', 37.0), ('choice2', 39.0), ('choice3', 46.0), ('choice4', 47.0), ('choice5', 49.0), ('choice6', 55.0), ('choice7', 'この中には答えはない'), ('choice8', 'わからない')]),
      OrderedDict([('CATEGORY', 'LN'), ('QUESTION', '以下のようにアルファベットが並んでいるとき、\nOの次に入るアルファベットはどれでしょうか。\nC, F, I, L, O, …'), ('ANSWER', np.int64(2)), ('image_file', 'blank.png'), ('has_image', np.int64(0)), ('choice1', 'Q'), ('choice2', 'R'), ('choice3', 'S'), ('choice4', 'T'), ('choice5', 'U'), ('choice6', 'V'), ('choice7', 'この中には答えはない'), ('choice8', 'わからない')]),
      OrderedDict([('CATEGORY', 'LN'), ('QUESTION', '以下のようにアルファベットが並んでいるとき、\nDの次に入るアルファベットはどれでしょうか。\nH, J, F, H, D, …'), ('ANSWER', np.int64(3)), ('image_file', 'blank.png'), ('has_image', np.int64(0)), ('choice1', 'D'), ('choice2', 'E'), ('choice3', 'F'), ('choice4', 'G'), ('choice5', 'H'), ('choice6', 'I'), ('choice7', 'この中には答えはない'), ('choice8', 'わからない')])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
    Routine routine_LN_trials
  LoopTerminator LN_trials
  LoopInitiator ROT_trials loopType="TrialHandler"
    Selected rows = $random(4)*66
    conditionsFile = conditions_3DR.csv
    loopType = random
    nReps = 1
    random seed = 4
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    conditions:
      [OrderedDict([('CATEGORY', '3DR'), ('QUESTION', '以下のサイコロは全部、それぞれの面に違う図形が描かれています。\nサイコロXを回転させたものとしてふさわしいサイコロを、\n選択肢から選んでください。'), ('ANSWER', np.int64(6)), ('image_file', 'images/image_3DR/fig11001.png'), ('has_image', np.int64(1)), ('choice1', 'A'), ('choice2', 'B'), ('choice3', 'C'), ('choice4', 'D\nどれもふさわしくない'), ('choice5', 'E'), ('choice6', 'F'), ('choice7', 'G'), ('choice8', 'H\n問題の解き方がわからない')]),
      OrderedDict([('CATEGORY', '3DR'), ('QUESTION', '以下のサイコロは全部、それぞれの面に違う図形が描かれています。\nサイコロXを回転させたものとしてふさわしいサイコロを、\n選択肢から選んでください。'), ('ANSWER', np.int64(5)), ('image_file', 'images/image_3DR/fig11002.png'), ('has_image', np.int64(1)), ('choice1', 'A'), ('choice2', 'B'), ('choice3', 'C'), ('choice4', 'D\nどれもふさわしくない'), ('choice5', 'E'), ('choice6', 'F'), ('choice7', 'G'), ('choice8', 'H\n問題 di解き方がわからない')]),
      OrderedDict([('CATEGORY', '3DR'), ('QUESTION', '以下のサイコロは全部、それぞれの面に違う図形が描かれています。\nサイコロXを回転させたものとしてふさわしいサイコロを, \n選択肢から選んでください。'), ('ANSWER', np.int64(3)), ('image_file', 'images/image_3DR/fig11003.png'), ('has_image', np.int64(1)), ('choice1', 'A'), ('choice2', 'B'), ('choice3', 'C'), ('choice4', 'D\nどれもふさわしくない'), ('choice5', 'E'), ('choice6', 'F'), ('choice7', 'G'), ('choice8', 'H\n問題の解き方がわからない')]),
      OrderedDict([('CATEGORY', '3DR'), ('QUESTION', '以下のサイコロは全部、それぞれの面に違う図形が描かれています。\nサイコロXを回転させたものとしてふさわしいサイコロを、\n選択肢から選んでください。'), ('ANSWER', np.int64(2)), ('image_file', 'images/image_3DR/fig11004.png'), ('has_image', np.int64(1)), ('choice1', 'A'), ('choice2', 'B'), ('choice3', 'C'), ('choice4', 'D\nどれもふさわしくない'), ('choice5', 'E'), ('choice6', 'F'), ('choice7', 'G'), ('choice8', 'H\n問題の解き方がわからない')])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
    Routine routine_3DR_trial
  LoopTerminator ROT_trials
  LoopInitiator MX_trials loopType="TrialHandler"
    Selected rows = $random(4)*11
    conditionsFile = conditions_MX.csv
    loopType = random
    nReps = 1
    random seed = 4
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    conditions:
      [OrderedDict([('CATEGORY', 'MX'), ('QUESTION', '空欄に当てはまる図として正しいものはどれでしょうか。'), ('ANSWER', np.int64(4)), ('image_file', 'images/image_MX/fig12043.png'), ('has_image', np.int64(1)), ('choice1', 'A'), ('choice2', 'B'), ('choice3', 'C'), ('choice4', 'D'), ('choice5', 'E'), ('choice6', 'F'), ('choice7', 'この中には答えはない'), ('choice8', 'わからない')]),
      OrderedDict([('CATEGORY', 'MX'), ('QUESTION', '空欄に当てはまる図として正しいものはどれでしょうか。'), ('ANSWER', np.int64(3)), ('image_file', 'images/image_MX/fig12044.png'), ('has_image', np.int64(1)), ('choice1', 'A'), ('choice2', 'B'), ('choice3', 'C'), ('choice4', 'D'), ('choice5', 'E'), ('choice6', 'F'), ('choice7', 'この中には答えはない'), ('choice8', 'わからない')]),
      OrderedDict([('CATEGORY', 'MX'), ('QUESTION', '空欄に当てはまる図として正しいものはどれでしょうか。'), ('ANSWER', np.int64(5)), ('image_file', 'images/image_MX/fig12045.png'), ('has_image', np.int64(1)), ('choice1', 'A'), ('choice2', 'B'), ('choice3', 'C'), ('choice4', 'D'), ('choice5', 'E'), ('choice6', 'F'), ('choice7', 'この中には答えはない'), ('choice8', 'わからない')]),
      OrderedDict([('CATEGORY', 'MX'), ('QUESTION', '空欄に当てはまる図として正しいものはどれでしょうか。'), ('ANSWER', np.int64(2)), ('image_file', 'images/image_MX/fig12046.png'), ('has_image', np.int64(1)), ('choice1', 'A'), ('choice2', 'B'), ('choice3', 'C'), ('choice4', 'D'), ('choice5', 'E'), ('choice6', 'F'), ('choice7', 'この中には答えはない'), ('choice8', 'わからない')])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
    Routine routine_MX_trial
  LoopTerminator MX_trials
  Routine end
  Routine DataSaving
